/**********************************************************************
How to Use This Graphic Library
	0. dont change/delete/add anything here, except you are sure with your modification
	1. copy it in the same folder as your main hoc file,
		then include this in your main hoc file by using {load_file("graphic_library.hoc")}
	2. Use Commands in your hoc file as:
		Plot1V("CellA") -- plot only CellA.soma.v(.5)
		Plot2V("CellA","CellB") -- plot both CellA.soma.v(.5) and CellA.soma.v(.5)
		Plot1CaPool("CellA") -- plot CellA.soma.cai(.5)
		Plot1CaPool("CellB") -- plot CellB.soma.cai(.5)
***********************************************************************/

strdef tstr1,tstr2
proc Plot1V() {
	sprint(tstr1,"%s.v(.5)",$s1)
	sprint(tstr2,"%s.v(.5)",$s2)
	newPlot(0,tstop,-80,60)
	graphItem.save_name("graphList[0].")
	graphItem.save_name("graphList[1].")
	graphList[0].append(graphItem)
	graphList[1].append(graphItem)
	graphItem.addexpr(tstr1,3,1)
	graphItem.addexpr(tstr2,3,1)
}

proc PlotWhatever(){
	sprint(tstr1,"%s",$s1)
	newPlot($2,$3,$4,$5)
	graphItem.save_name("graphList[0].")
	graphList[0].append(graphItem)
	graphItem.addexpr(tstr1,3,1)

}

proc PlotSynCurrent() {
	sprint(tstr1,"%s",$s1)
	sprint(tstr2,"%s",$s2)
	newPlot(0,tstop,-80,60)
	graphItem.save_name("graphList[0].")
	graphItem.save_name("graphList[1].")
	graphList[0].append(graphItem)
	graphList[1].append(graphItem)
	graphItem.addexpr(tstr1,3,1)
	graphItem.addexpr(tstr2,3,1)
}

proc Plot2V() {
	sprint(tstr1,"%s.apicaldend.v(.5)",$s1)
	newPlot(0,tstop,-80,60)
	graphItem.save_name("graphList[0].")
	graphList[0].append(graphItem)
	graphItem.addexpr(tstr1,3,1)
}

proc Plot3V() {
	sprint(tstr1,"%s.basaldend.v(.5)",$s1)
	newPlot(0,tstop,-80,60)
	graphItem.save_name("graphList[0].")
	graphList[0].append(graphItem)
	graphItem.addexpr(tstr1,3,1)
}